OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
0x790d75b8 = xin wang
0x8c1fc55b = 0.1

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#0.Stimulations -> Generic stream writer
  Filename = D:/data/code/eeg/OpenViBE/data/motor-imagery-1-[$core{date}-$core{time}].ov
  Use compression = false
Input stream=#0.Signal stream, Stimulations stream=#0.Stimulations -> CSV File Writer
  Filename = D:/data/code/eeg/OpenViBE/data/motor-imagery-1-[$core{date}-$core{time}].csv
  Precision = 12
  Append data = false
  Only last matrix = false
#0.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop

Graz Motor Imagery BCI Stimulator => #4
  Lua Script = D:/data/code/eeg/OpenViBE/script/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 25
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  third class = OVTK_GDF_Up
  fourth class = OVTK_GDF_Down
  Baseline Duration (in sec) = 3
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 6
  Feedback Duration (in sec) = 3.75
  End of Trial Minimum Duration (in sec) = 2.5
  End of Trial Maximum Duration (in sec) = 4
Stimulations=#4 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
